<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2024.1.5">
  <Settings>
    <Param val="3" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="" valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;', 'session': '001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="False" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="False" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[1536, 864]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="float" valType="str" updates="None" name="clockFormat"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="Exp_4" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="" valType="code" updates="None" name="frameRate"/>
    <Param val="Attempting to measure frame rate of screen, please wait..." valType="str" updates="None" name="frameRateMsg"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="warning" valType="code" updates="None" name="logging level"/>
    <Param val="True" valType="bool" updates="None" name="measureFrameRate"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="True" valType="bool" updates="None" name="plCompanionRecordingEnabled"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="1" valType="code" updates="None" name="runMode"/>
    <Param val="False" valType="bool" updates="None" name="rush"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <PolygonComponent name="Fixation" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="white" valType="color" updates="constant" name="fillColor"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="white" valType="color" updates="constant" name="lineColor"/>
        <Param val="1" valType="num" updates="constant" name="lineWidth"/>
        <Param val="4" valType="int" updates="constant" name="nVertices"/>
        <Param val="Fixation" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="triangle" valType="str" updates="None" name="shape"/>
        <Param val="(10, 10)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="1.0" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="pix" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="list" updates="constant" name="vertices"/>
      </PolygonComponent>
      <GratingComponent name="grating" plugin="None">
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="avg" valType="str" updates="constant" name="blendmode"/>
        <Param val="$[1,1,1]" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="0.3" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="linear" valType="str" updates="constant" name="interpolate"/>
        <Param val="gauss" valType="file" updates="constant" name="mask"/>
        <Param val="grating" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="tilt" valType="num" updates="set every repeat" name="ori"/>
        <Param val="0.0" valType="num" updates="constant" name="phase"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="False" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="5" valType="num" updates="constant" name="sf"/>
        <Param val="(0.2, 0.2)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="1.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="0.3" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="sin" valType="file" updates="constant" name="tex"/>
        <Param val="128" valType="num" updates="constant" name="texture resolution"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
      </GratingComponent>
      <KeyboardComponent name="key_resp" plugin="None">
        <Param val="'up', 'down'" valType="list" updates="constant" name="allowedKeys"/>
        <Param val="$corrAns" valType="str" updates="constant" name="correctAns"/>
        <Param val="" valType="str" updates="None" name="deviceLabel"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="True" valType="bool" updates="constant" name="discard previous"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="key_resp" valType="code" updates="None" name="name"/>
        <Param val="press" valType="str" updates="constant" name="registerOn"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="1.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="last key" valType="str" updates="constant" name="store"/>
        <Param val="True" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="True" valType="bool" updates="constant" name="syncScreenRefresh"/>
      </KeyboardComponent>
      <CodeComponent name="code" plugin="None">
        <Param val="" valType="extendedCode" updates="constant" name="Before Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Before JS Experiment"/>
        <Param val="if random() &gt; 0.5:&amp;#10;    tilt = 0;&amp;#10;    corrAns = 'up'&amp;#10;else:&amp;#10;      tilt = int(randint(-5,5))&amp;#10;      corrAns = 'down'&amp;#10;            &amp;#10;    &amp;#10;&amp;#10;" valType="extendedCode" updates="constant" name="Begin Experiment"/>
        <Param val="if ((Math.random() &gt; 0.5)) {&amp;#10;    tilt = 0;&amp;#10;    corrAns = &quot;up&quot;;&amp;#10;} else {&amp;#10;    tilt = Number.parseInt(util.randint((- 5), 5));&amp;#10;    corrAns = &quot;down&quot;;&amp;#10;}&amp;#10;" valType="extendedCode" updates="constant" name="Begin JS Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin JS Routine"/>
        <Param val="" valType="extendedCode" updates="constant" name="Begin Routine"/>
        <Param val="Auto-&gt;JS" valType="str" updates="None" name="Code Type"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="Each JS Frame"/>
        <Param val="" valType="extendedCode" updates="constant" name="End Experiment"/>
        <Param val="" valType="extendedCode" updates="constant" name="End JS Experiment"/>
        <Param val="trials.addData(&quot;tilt&quot;, tilt);&amp;#10;if ((Math.random() &gt; 0.5)) {&amp;#10;    tilt = 0;&amp;#10;    corrAns = &quot;up&quot;;&amp;#10;} else {&amp;#10;    tilt = Number.parseInt(util.randint((- 5), 5));&amp;#10;    corrAns = &quot;down&quot;;&amp;#10;}&amp;#10;" valType="extendedCode" updates="constant" name="End JS Routine"/>
        <Param val="trials.addData('tilt',tilt)&amp;#10;&amp;#10;if random() &gt; 0.5:&amp;#10;    tilt = 0;&amp;#10;    corrAns = 'up'&amp;#10;else:&amp;#10;      tilt = int(randint(-5,5))&amp;#10;      corrAns = 'down'&amp;#10;            &amp;#10;    &amp;#10;&amp;#10;" valType="extendedCode" updates="constant" name="End Routine"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="code" valType="code" updates="None" name="name"/>
      </CodeComponent>
    </Routine>
  </Routines>
  <Flow>
    <LoopInitiator loopType="TrialHandler" name="trials">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="None" valType="str"/>
      <Param name="conditionsFile" updates="None" val="" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="random" valType="str"/>
      <Param name="nReps" updates="None" val="100" valType="num"/>
      <Param name="name" updates="None" val="trials" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="trials"/>
  </Flow>
</PsychoPy2experiment>
